<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>trials_2columns.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%h</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>cue motors</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>motor1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>1</rx:Start>
                      <rx:Step>8</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialnumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ard:ServoOutput">
                  <ard:PortName>COM1</ard:PortName>
                  <ard:Pin>0</ard:Pin>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>motor2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>2</rx:Start>
                      <rx:Step>6</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialnumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ard:ServoOutput">
                  <ard:Pin>0</ard:Pin>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>motor3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>3</rx:Start>
                      <rx:Step>6</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialnumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ard:ServoOutput">
                  <ard:Pin>0</ard:Pin>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>motor4</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>4</rx:Start>
                      <rx:Step>6</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialnumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ard:ServoOutput">
                  <ard:Pin>0</ard:Pin>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>motor5</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>4</rx:Start>
                      <rx:Step>6</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialnumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ard:ServoOutput">
                  <ard:Pin>0</ard:Pin>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>motor6</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>4</rx:Start>
                      <rx:Step>6</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialnumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="ard:ServoOutput">
                  <ard:Pin>0</ard:Pin>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>correct</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Slice">
                <rx:Start>7</rx:Start>
                <rx:Step>8</rx:Step>
                <rx:Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>trialnumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>giveReward1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea2</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>giveReward2</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea3</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>giveReward3</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea4</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>giveReward4</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="0" To="25" Label="Source1" />
            <Edge From="0" To="32" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source2" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="16" Label="Source1" />
            <Edge From="8" To="23" Label="Source1" />
            <Edge From="8" To="30" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="35" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="35" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="35" Label="Source3" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source4" />
            <Edge From="35" To="36" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>mistakeLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Slice">
                <rx:Start>7</rx:Start>
                <rx:Step>8</rx:Step>
                <rx:Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>trialnumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea3</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea4</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>rew2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source3</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="SubscribeSubject">
              <Name>inRewArea2</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>rew3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source3</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="GroupWorkflow">
              <Name>rew4</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source3</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="GroupWorkflow">
              <Name>rew1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source3</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LogicalOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MulticastSubject">
              <Name>mistake</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="6" To="23" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="21" Label="Source1" />
            <Edge From="10" To="28" Label="Source1" />
            <Edge From="10" To="30" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="21" Label="Source2" />
            <Edge From="15" To="30" Label="Source3" />
            <Edge From="15" To="32" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source3" />
            <Edge From="20" To="28" Label="Source3" />
            <Edge From="20" To="32" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="34" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="27" To="30" Label="Source2" />
            <Edge From="27" To="32" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="34" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="34" Label="Source3" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source4" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="36" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>mistake</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>rewardLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>giveReward1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="SubscribeSubject">
              <Name>giveReward2</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="SubscribeSubject">
              <Name>giveReward3</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="SubscribeSubject">
              <Name>giveReward4</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\Andre Maia Chagas\Desktop\8487_14_29_12__3012023_train_all.mp4</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>73</cv:X>
            <cv:Y>50</cv:Y>
            <cv:Width>334</cv:Width>
            <cv:Height>360</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>rewArea1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>194</cv:X>
                  <cv:Y>81</cv:Y>
                  <cv:Width>20</cv:Width>
                  <cv:Height>24</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>187</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>50000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>inRewArea1</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>rewArea2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>265</cv:X>
                  <cv:Y>84</cv:Y>
                  <cv:Width>20</cv:Width>
                  <cv:Height>24</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>187</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>50000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>inRewArea2</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>rewArea3</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>189</cv:X>
                  <cv:Y>285</cv:Y>
                  <cv:Width>20</cv:Width>
                  <cv:Height>24</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>187</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>50000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>inRewArea3</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>rewArea4</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>258</cv:X>
                  <cv:Y>288</cv:Y>
                  <cv:Width>20</cv:Width>
                  <cv:Height>24</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>187</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>50000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>inRewArea4</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>detectEntry</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>entrance1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>81</cv:X>
                        <cv:Y>183</cv:Y>
                        <cv:Width>31</cv:Width>
                        <cv:Height>18</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>148</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>50000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>entrance2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>104</cv:X>
                        <cv:Y>186</cv:Y>
                        <cv:Width>31</cv:Width>
                        <cv:Height>16</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>148</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>50000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:DistinctUntilChangedBy">
              <rx:KeySelector>Item2</rx:KeySelector>
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="rx:Condition">
              <Name>detectEntry</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>trialnumber</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>trialnumber</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>detectExit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>entrance1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>81</cv:X>
                        <cv:Y>183</cv:Y>
                        <cv:Width>31</cv:Width>
                        <cv:Height>18</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>148</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>50000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>entrance2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>104</cv:X>
                        <cv:Y>186</cv:Y>
                        <cv:Width>31</cv:Width>
                        <cv:Height>16</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>148</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>50000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:DistinctUntilChangedBy">
              <rx:KeySelector>Item1</rx:KeySelector>
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>noMoreReward</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>noMoreReward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>trialnumber</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>noMoreReward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>mistake</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="11" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>