<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\Andre Maia Chagas\Desktop\8487_14_29_12__3012023_train_all.mp4</cv:FileName>
          <cv:PlaybackRate>120</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>166</cv:X>
            <cv:Y>82</cv:Y>
            <cv:Width>230</cv:Width>
            <cv:Height>328</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>entrance1</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Crop">
                  <cv:RegionOfInterest>
                    <cv:X>12</cv:X>
                    <cv:Y>142</cv:Y>
                    <cv:Width>15</cv:Width>
                    <cv:Height>38</cv:Height>
                  </cv:RegionOfInterest>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Threshold">
                  <cv:ThresholdValue>148</cv:ThresholdValue>
                  <cv:MaxValue>255</cv:MaxValue>
                  <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Sum" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Val0</Selector>
              </Expression>
              <Expression xsi:type="GreaterThan">
                <Operand xsi:type="DoubleProperty">
                  <Value>50000</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>entrance2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>30</cv:X>
                  <cv:Y>144</cv:Y>
                  <cv:Width>22</cv:Width>
                  <cv:Height>34</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>148</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>50000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="BitwiseAnd">
        <Operand xsi:type="BooleanProperty">
          <Value>false</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>@returns(int)
def process(value):
  if value:
    output = 1
  else:
    output = 0
  return output</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>trials_2columns.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%h</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>hacky_work</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Slice">
                <rx:Start>0</rx:Start>
                <rx:Step>6</rx:Step>
                <rx:Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(int)
def process(value):
  
  output=value[1]
  
  
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>does not work</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Slice">
                <rx:Start>0</rx:Start>
                <rx:Step>6</rx:Step>
                <rx:Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>100</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="15" Label="Source2" />
      <Edge From="11" To="14" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>